<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:StateMachine;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>WaitKey</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="StateMachineDefinition" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>..\Schemas\state-machine.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromYaml">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:StateMachine" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StateDefinitions</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GenerateTransitionDictionary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Alias</rx:KeySelector>
              <rx:ElementSelector>it</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TransitionDictionary</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>gratings</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:State">
        <rx:Name>CurrentState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>BeginState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SelectState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Logic</Selector>
            </Expression>
            <Expression xsi:type="p1:MatchLogicTransition">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Timer" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DueTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>timer</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>KeyPress</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Logic</Selector>
            </Expression>
            <Expression xsi:type="p1:MatchLogicTransition">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:KeyPress" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>KeyCode</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Filter" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>None</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>keypress</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="27" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>